PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s' % (expName, expInfo['participant'])
  Experiment info = {'participant': 'f"{randint(0, 999999):04.0f}"', 'prolificID': '', 'gender (M/F)': '', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save hdf5 file = True
  Screen = 1
  Units = pix
  Use version = 2024
  Window size (pixels) = [1920, 1080]
  colPriority = {'': ''}
  expName = vol_reproduction
  keyboardBackend = PsychToolbox
  logging level = data
  runMode = 0
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Routines
  Routine Instruction
    RoutineSettingsComponent Instruction
      saveStartStop = False
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    TextComponent text_inst
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Experimental Instruction

        Welcome to our reproduction experiment. In this experiment, you will see a Gabor patch appears on the screen. You need to remember the DURATION of the Gabor patch. After it disappears, you are asked to press the 'Down' Arrow key as long as what you perceived. The key press will show a Gabor patch again, helping you compare the last duration.

        Press SPACE to start ...
    KeyboardComponent instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        import numpy as np
        import pandas as pd

        #generate sequence
        low = 600 #ms
        high = 1800 #ms
        step = 16.67 #ms for 60Hz refresh rate
        #n_trl = 100
        n_trl = 3 # piloting phase

        w = np.cumsum(np.random.randn(n_trl)) #random walk
        w = (w - w.mean()) / w.std() #normalization
        w = (w - w.min()) / (w.max() - w.min()) * (high - low) + low # to low-high range
        w = np.round(w / step) * step #round to the refresh time

        w1 = np.round(w) #random walk round - low
        w2 = np.random.permutation(w1) #shuffled - high


        # choose block order
        if np.random.rand() < 0.5:
            durations = np.concatenate([w1, w2])/1000.0
            labels    = ['low'] * n_trl + ['high'] * n_trl
        else:
            durations = np.concatenate([w2, w1])/1000.0
            labels    = ['high'] * n_trl + ['low'] * n_trl

        # Practice trials
        #practice_count = 10
        practice_count = 3 # piloting phase
        practice_options = [1.1, 1.2, 1.3]
        practice_durations = np.random.choice(practice_options,
                size=practice_count,replace=True).tolist()
        practice_labels = ['practice'] * practice_count

        # Combine practice + blocks
        durations = practice_durations + durations.tolist()
        labels = practice_labels + labels

        df = pd.DataFrame({
            'trlno':         np.arange(1, 2*n_trl + 1 + practice_count),
            'duration':   durations, # in sec
            'stochasticity': labels
        })
        # save to subfolder condition
        subCond = 'sub_seqs/' + expInfo['participant'] + '.csv'
        df.to_csv(subCond, index = False)
      Begin JS Experiment:
        // JavaScript doesn't have numpy or pandas, so we use regular arrays and math
        let low = 600; // ms
        let high = 1800; // ms
        let step = 16.67; // ms for 60Hz
        let n_trl = 3;

        // Generate random walk
        let w = [];
        for (let i = 0; i < n_trl; i++) {
            w.push((Math.random() * 2 - 1)); // simple random noise
        }
        // Cumulative sum
        for (let i = 1; i < w.length; i++) {
            w[i] += w[i - 1];
        }
        // Normalize
        let mean = w.reduce((a, b) => a + b) / w.length;
        let std = Math.sqrt(w.map(x => (x - mean) ** 2).reduce((a, b) => a + b) / w.length);
        w = w.map(x => (x - mean) / std);

        // Rescale to low-high range
        let minVal = Math.min(...w);
        let maxVal = Math.max(...w);
        w = w.map(x => ((x - minVal) / (maxVal - minVal)) * (high - low) + low);

        // Round to nearest refresh duration
        w = w.map(x => Math.round(x / step) * step);

        // Create w1 and w2
        let w1 = w.map(x => Math.round(x));
        let w2 = [...w1];
        for (let i = w2.length - 1; i > 0; i--) {
            const j = Math.floor(Math.random() * (i + 1));
            [w2[i], w2[j]] = [w2[j], w2[i]];
        }

        // Choose block order
        let durations = [];
        let labels = [];
        if (Math.random() < 0.5) {
            durations = w1.concat(w2).map(x => x / 1000.0); // ms to sec
            labels = Array(n_trl).fill('low').concat(Array(n_trl).fill('high'));
        } else {
            durations = w2.concat(w1).map(x => x / 1000.0);
            labels = Array(n_trl).fill('high').concat(Array(n_trl).fill('low'));
        }

        // Practice trials
        let practice_count = 3;
        let practice_options = [1.1, 1.2, 1.3];
        let practice_durations = [];
        for (let i = 0; i < practice_count; i++) {
            let choice = practice_options[Math.floor(Math.random() * practice_options.length)];
            practice_durations.push(choice);
        }
        let practice_labels = Array(practice_count).fill('practice');

        // Combine
        durations = practice_durations.concat(durations);
        labels = practice_labels.concat(labels);

        // Generate trial objects
        trialList = [];
        for (let i = 0; i < durations.length; i++) {
            trialList.push({
                trlno: i + 1,
                duration: durations[i],
                stochasticity: labels[i]
            });
        }
  Routine Encoding
    RoutineSettingsComponent Encoding
      saveStartStop = False
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    GratingComponent stimulus_grating
      contrast = 0.4
      mask = gauss
      ori [set every frame] = orientation
      sf = 5
      size = (0.007*x_scale, 0.015*y_scale)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $duration
      tex = sin
      units = norm
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    CodeComponent code_encoding
      Code Type = Auto->JS
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      Begin Routine:
        orientation = randint(1,180)
    PolygonComponent fixation
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.001*x_scale, 0.001*x_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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  Routine Reproduction
    RoutineSettingsComponent Reproduction
      saveStartStop = False
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    GratingComponent gabor
      contrast = 0.4
      mask = gauss
      ori [set every frame] = orientation
      sf = 5
      size = (0.007*x_scale, 0.015*y_scale)
      startVal [condition] = $keyPressed
      stopVal [condition] = $keyReleased
      tex = sin
      units = norm
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    CodeComponent code_reproduction
      Code Type = Both
      Begin Experiment:
        from psychopy.hardware.keyboard import Keyboard
        kb = Keyboard()
      Begin JS Experiment:
        kb = new core.Keyboard({psychoJS: psychoJS, clock: new util.Clock(), waitForStart: true});
      Begin JS Routine:
        kb.clearEvents();
        keyPressed = false;
        keyReleased = false;
        keyOnset = null;
        repDuration = null;
      Begin Routine:
        # clear any stray events, and reset our flags/timers
        kb.clearEvents()
        #event.clearEvents(eventType='keyboard')

        keyPressed   = False
        keyReleased = False
        keyOnset     = None
        repDuration  = None
      Each Frame:
        # poll for space‐bar down & up, waiting for the release event
        keys = kb.getKeys(keyList=['down'], waitRelease=False, clear = False)

        for k in keys:
            # ─ key down ─
            if (k.duration is None) and not keyPressed:
                keyPressed = True
                if keyOnset is None:
                    keyOnset   =  globalClock.getTime()

        if keyPressed:
            if not keys:
                keyReleased = True
                keyOffset = globalClock.getTime()
                repDuration = keyOffset - keyOnset
                continueRoutine = False        # finish this trial
      Each JS Frame:
        keys = kb.getKeys({"keyList": ["down"], "waitRelease": false, "clear": false});
        for (var k, _pj_c = 0, _pj_a = keys, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            k = _pj_a[_pj_c];
            if (((k.duration === null) && (! keyPressed))) {
                keyPressed = true;
                if ((keyOnset === null)) {
                    keyOnset = globalClock.getTime();
                }
            }
        }
        if (keyPressed) {
            if ((! keys)) {
                keyReleased = true;
                keyOffset = globalClock.getTime();
                repDuration = (keyOffset - keyOnset);
                continueRoutine = false;
            }
        }
      End JS Routine:
        psychoJS.experiment.addData("orientation", orientation);
        psychoJS.experiment.addData("rpr_onset", keyOnset);
        psychoJS.experiment.addData("rpr_duration", repDuration);
      End Routine:
        # log the key‐hold data
        thisExp.addData('orientation', orientation)
        thisExp.addData('rpr_onset',   keyOnset)
        thisExp.addData('rpr_duration', repDuration)
  Routine iti
    RoutineSettingsComponent iti
      saveStartStop = False
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    TextComponent iti_blank
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = deg
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  Routine Goodbye
    RoutineSettingsComponent Goodbye
      saveStartStop = False
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    TextComponent goodbye_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        The whole experiment is completed!

        Many thanks for your participation!

        Press SPACE to exit...
    KeyboardComponent goodbye_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block
    RoutineSettingsComponent block
      saveStartStop = False
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    TextComponent text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $Block_text
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        Block_text=''
      Begin Routine:
        # by default skip the routine:
        continueRoutine = False

        # on trial 0 → practice message
        if trials.thisTrialN == 0:
            Block_text = 'Practice will start. Please press space bar to continue.'
            continueRoutine = True

        # at the end of practice
        elif trials.thisTrialN == practice_count:
            Block_text = 'Formal Experiment will start. Please press space bar to continue.'
            continueRoutine = True
        # after the first FormalTrials
        elif trials.thisTrialN == practice_count + n_trl:
            Block_text = 'You did a great job, please take a rest. Press space bar to continue to next block.'
            continueRoutine = True
  Routine cue_to_reproduce
    RoutineSettingsComponent cue_to_reproduce
      saveStartStop = False
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    PolygonComponent rep_cue
      fillColor = 0.1294, 0.8667, 0.1294
      lineColor = 0.1294, 0.8667, 0.1294
      saveStartStop = False
      shape = circle
      size = (0.0007*x_scale, 0.0007*x_scale)
      startVal [time (s)] = .3
      stopVal [duration (s)] = .3
      units = height
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  Routine feedback
    RoutineSettingsComponent feedback
      skipIf = trials.thisTrialN >= practice_count
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    TextComponent feedback_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text [set every frame] = $fb_text
      units = norm
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    CodeComponent feedback_code
      Code Type = Auto->JS
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      Before Experiment:
        fb_text  = ''
      Begin Routine:
        error_ratio = np.abs(repDuration/duration -1)

        if error_ratio > 0.3:
            fb_text = "Your key pressed duration deviated too far!"
        else:
            fb_text = ''
  Routine scale_setup
    RoutineSettingsComponent scale_setup
      saveStartStop = False
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    CodeComponent scale_code
      Code Type = Both
      Begin Experiment:
        oldt=0
        x_size=8.560
        y_size=5.398
        screen_height=0

        if win.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' norm units'
            vsize=2
        elif win.units=='pix':
            x_scale=60
            y_scale=40
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' height units'
            vsize=1
      Begin JS Experiment:
        oldt = 0;
        x_size = 8.56;
        y_size = 5.398;
        screen_height = 0;
        if ((psychoJS.window.units === "norm")) {
            x_scale = 0.05;
            y_scale = 0.1;
            dbase = 0.0001;
            unittext = " norm units";
            vsize = 2;
        } else {
            if ((psychoJS.window.units === "pix")) {
                x_scale = 60;
                y_scale = 40;
                dbase = 0.1;
                unittext = " pixels";
                vsize = psychoJS.window.size[1];
            } else {
                x_scale = 0.05;
                y_scale = 0.05;
                dbase = 0.0001;
                unittext = " height units";
                vsize = 1;
            }
        }
  Routine screen_scale_keys
    RoutineSettingsComponent screen_scale_keys
      saveStartStop = False
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    CodeComponent scale_keys_code
      Code Type = Auto->JS
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      Begin Routine:
        print('key start')
        event.clearEvents()
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'space' in keys and t > 1:
                continueRoutine=False
            elif 'up' in keys:
                y_scale=round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale=round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000
            screen_height=round(vsize*10/y_scale)/10
            text_bottom.text='X Scale = '+str(x_scale)+unittext+' per cm, Y Scale = '+str(y_scale)+unittext+' per cm\nScreen height = '+str(screen_height)+' cm\n\nPress the space bar when done'
            ccimage.size=[x_size*x_scale, y_size*y_scale]
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
    TextComponent text_top
      letterHeight = 0.1
      pos = (0, .7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Resize this image to match the size of a credit card
        Up arrow for taller
        Down arrow for shorter
        Left arrow for narrower
        Right arrow for wider
    TextComponent text_bottom
      letterHeight = 0.1
      pos = (0, -.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the space bar when done
      units = norm
      wrapWidth = 1.5
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    ImageComponent ccimage
      image = bank-1300155_640.png
      size = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
      units = pix
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  Routine rectangle_keys
    RoutineSettingsComponent rectangle_keys
      saveStartStop = False
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    TextComponent rectangle_text
      letterHeight = 0.1
      pos = (0, -.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        This shape should be a 10 cm square.
        Component size  (10*x_scale, 10*y_scale) set every repeat.
        Press space to continue.
    PolygonComponent polygon_keys
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = (10*x_scale, 10*y_scale)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_keys
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine scale_setup
  LoopInitiator key_scale loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 1
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    Routine screen_scale_keys
    Routine rectangle_keys
  LoopTerminator key_scale
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $subCond
    loopType = sequential
    nReps = 1
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    Routine block
    Routine Encoding
    Routine cue_to_reproduce
    Routine Reproduction
    Routine feedback
    Routine iti
  LoopTerminator trials
  Routine Goodbye
